###########################UNWRAPPING##############################

int first_list = int(first_list_wrapper.caption());
int num_blocks = int(num_blocks_wrapper.caption());
int num_trials = int(num_trials_wrapper.caption());
int max_post_response_delay = int(max_post_response_delay_wrapper.caption());
int min_post_response_delay = int(min_post_response_delay_wrapper.caption());

###########################PCL VARS################################

array<trial> block1[0];
array<trial> block2[0];

int curr_type;
trial this_trial;
bool needs_shuffle;

array<double> port_codes[0];
array<int> target_buttons[1];

output_file log = new output_file;
log.open("Blinky_log_" + date_time( "yyyy.mm.dd_hh.nn.ss" )+ ".csv");
log.print("Stimulus Type,Response Type,Reaction Time\n");

int stim_type;
array<int> c_trials[num_blocks][num_trials];
array<double> reactions[num_blocks][num_trials];
array<string> types[num_blocks][num_trials];

array<string> stim_types[6] = {"Color", "Shape", "Motion", "Shape and Motion", "Color and Motion", "Color and Shape"};

###########################SUB ROUTINES#############################

sub string type_to_string(int aType) begin
	if aType == stimulus_hit then
		return "HIT";
	elseif aType == stimulus_incorrect then
		return "INCORRECT";
	else
		return "MISS";
	end;
return "";
end;


sub input_data(int trial, int block, int s_type, stimulus_data data) begin
	
	log.print("\"" + data.event_code() + "\"" + "," + type_to_string(data.type()) + "," + string(data.reaction_time_double()) + "\n");

	c_trials[block][trial] = data.type();
	reactions[block][trial] = data.reaction_time_double();
	types[block][trial] = stim_types[s_type];

end;

sub block_output(int block) begin

	log.print("\nBlock Data\n");
	log.print("Stimulus type,Percent Correct,Correct Average Reaction,Incorrect Average Reaction\n");
	double c_avg;
	double i_avg;
	double correct;
	double incorrect;

	log.print("\nBlock " + string(block) + "\n");

	loop int i = 1 until i > num_blocks/2 begin
		c_avg = 0;
		i_avg = 0;
		correct = 0;
        incorrect = 0;

		loop int j = 1 until j > num_trials begin
			if (types[block][j] == stim_types[i]) then
				if (c_trials[block][j] == simulus_correct) then
					correct = correct + 1;
					c_avg = c_avg + reactions[block][j];
				else if (c_trials[block][j] == stimulus_incorrect) then
                    incorrect = incorrect + 1;
					i_avg = i_avg + reactions[block][j];
				end;
			end;
			j = j + 1;
		end;
		if (correct != 0) then
			c_avg = c_avg / correct;
		end;
		if (correct != 4) then 
			i_avg = i_avg / (4 - correct);
		end;
		
		correct = correct / (correct + incorrect);

		log.print(stim_types[i] + "," + string(correct) + "," + string(c_avg) + "," + string(i_avg) + "\n");
		i = i + 1;
	end;
	log .print("\n");
end;

sub final_output begin

	log.print("Totals\n");
	log.print("Stimulus type,Percent Correct,Correct Average Reaction,Incorrect Average Reaction\n");
	
	double correct;
	double incorrect;
	double c_avg;
	double i_avg;

	loop int i = 1 until i > num_blocks/2 begin

		correct = 0;
		incorrect = 0;
		c_avg = 0;
		i_avg = 0;

		loop int j = 1 until j > num_blocks begin 
			
			loop int k = 1 until k > num_trials begin 
				
				if (types[j][k] == stim_types[i]) then 

					if (c_trials[j][k] == stimulus_hit) then

						correct = correct + 1;
						c_avg = c_avg + reactions[j][k];
					else if (c_trials[j][k] == stimulus_incorrect) then

                        incorrect = incorrect + 1;
						i_avg = i_avg + reactions[j][k];
					end;
				end;
				k = k + 1;
			end;
			j = j + 1;
		end;
		
		if (correct != 0) then
			c_avg = c_avg / correct;
		end;
		
		if (correct != (num_blocks * 4)) then 
			i_avg = i_avg / ((num_blocks * 4) - correct);
		end;
		
		correct = correct / (num_blocks * (incorrect + correct));
		
		log.print(stim_types[i] + "," + string(correct) + "," + string(c_avg) + "," + string(i_avg) + "\n");

		i = i + 1;
	end;
end;

sub fill_array(int first) begin 
	if (first == 1) then
		block1.add(Psh_Bsh_111_115);
		block1.add(pSV_pCH_212_213);
		block1.add(pCH_pSV_213_212);
		block1.add(Pcv_Bcv_114_118);
		block1.add(bSH_bCV_215_218);
		block1.add(Bsv_Psv_116_112);
		block1.add(Bch_Pch_117_113);
		block1.add(bCV_bSH_218_215);
		block1.add(PsH_BsV_221_226);
		block1.add(pSv_pCv_122_124);
		block1.add(pCh_pSh_123_121);
		block1.add(PcV_BcH_224_227);
		block1.add(bSh_bCh_125_127);
		block1.add(BsV_PsH_226_221);
		block1.add(BcH_PcV_227_224);
		block1.add(bCv_bSv_128_126);
		block1.add(psH_psV_131_132);
		block1.add(PSv_BCv_232_238);
		block1.add(pcH_pcV_133_134);
		block1.add(PCv_BSv_234_236);
		block1.add(BSh_PCh_235_233);
		block1.add(bsV_bsH_136_135);
		block1.add(BCh_PSh_237_231);
		block1.add(bcV_bcH_138_137);

		block2.add(pSH_pCV_211_214);
		block2.add(Psv_Bsv_112_116);
		block2.add(Pch_Bch_113_117);
		block2.add(pCV_pSH_214_211);
		block2.add(Bsh_Psh_115_111);
		block2.add(bSV_bCH_216_217);
		block2.add(bCH_bSV_217_216);
		block2.add(Bcv_Pcv_118_114);
		block2.add(pSh_pCh_121_123);
		block2.add(PsV_BsH_222_225);
		block2.add(PcH_BcV_223_228);
		block2.add(pCv_pSv_124_122);
		block2.add(BsH_PsV_225_222);
		block2.add(bSv_bCv_126_128);
		block2.add(bCh_bSh_127_125);
		block2.add(BcV_PcH_228_223);
		block2.add(PSh_BCh_231_237);
		block2.add(psV_psH_132_131);
		block2.add(PCh_BSh_233_235);
		block2.add(pcV_pcH_134_133);
		block2.add(bsH_bsV_135_136);
		block2.add(BSv_PCv_236_234);
		block2.add(bcH_bcV_137_138);
		block2.add(BCv_PSv_238_232);
	elseif first == 2 then

		block1.add(pSH_pCV_211_214);
		block1.add(Psv_Bsv_112_116);
		block1.add(Pch_Bch_113_117);
		block1.add(pCV_pSH_214_211);
		block1.add(Bsh_Psh_115_111);
		block1.add(bSV_bCH_216_217);
		block1.add(bCH_bSV_217_216);
		block1.add(Bcv_Pcv_118_114);
		block1.add(pSh_pCh_121_123);
		block1.add(PsV_BsH_222_225);
		block1.add(PcH_BcV_223_228);
		block1.add(pCv_pSv_124_122);
		block1.add(BsH_PsV_225_222);
		block1.add(bSv_bCv_126_128);
		block1.add(bCh_bSh_127_125);
		block1.add(BcV_PcH_228_223);
		block1.add(PSh_BCh_231_237);
		block1.add(psV_psH_132_131);
		block1.add(PCh_BSh_233_235);
		block1.add(pcV_pcH_134_133);
		block1.add(bsH_bsV_135_136);
		block1.add(BSv_PCv_236_234);
		block1.add(bcH_bcV_137_138);
		block1.add(BCv_PSv_238_232);

		block2.add(Psh_Bsh_111_115);
		block2.add(pSV_pCH_212_213);
		block2.add(pCH_pSV_213_212);
		block2.add(Pcv_Bcv_114_118);
		block2.add(bSH_bCV_215_218);
		block2.add(Bsv_Psv_116_112);
		block2.add(Bch_Pch_117_113);
		block2.add(bCV_bSH_218_215);
		block2.add(PsH_BsV_221_226);
		block2.add(pSv_pCv_122_124);
		block2.add(pCh_pSh_123_121);
		block2.add(PcV_BcH_224_227);
		block2.add(bSh_bCh_125_127);
		block2.add(BsV_PsH_226_221);
		block2.add(BcH_PcV_227_224);
		block2.add(bCv_bSv_128_126);
		block2.add(psH_psV_131_132);
		block2.add(PSv_BCv_232_238);
		block2.add(pcH_pcV_133_134);
		block2.add(PCv_BSv_234_236);
		block2.add(BSh_PCh_235_233);
		block2.add(bsV_bsH_136_135);
		block2.add(BCh_PSh_237_231);
	end;
end;

###################################################################################

fill_array(first_list);

loop int i = 1 until i > num_blocks/2 begin
	
	block1.shuffle();
	block2.shuffle();
	term.print_line("Shuffled");
	set_trial.present();

	loop int j = 1 until j > block1.count() begin
		this_trial = block1[j];

		this_trial.set_start_delay(random(min_post_response_delay, max_post_response_delay));

		this_trial.get_stimulus_event(1).get_port_codes(port_codes);
		target_buttons[1] = int((port_codes[1]) / 100);
		curr_type = (i * 2) + (target_buttons[1] - 2);
		term.print_line("trial: " + this_trial.description());
				
		this_trial.present();

		response_trial.get_stimulus_event(1).set_target_button(target_buttons);		
		response_trial.present();

		stimulus_data stim_data = stimulus_manager.last_stimulus_data();
		stim_data.set_event_code(this_trial.description());
		
		#stim_type is used to map the different types of stimuli (color, motion, etc) to sequential values (1, 2, etc) using the port code
		stim_type = (int(port_codes[1] / 100)*3 + int(port_codes[1] / 10) % 10) - 3;
		input_data(j, i*2 -1, stim_type, stim_data);

		j = j+1;
	end;

	block_output(i*2-1);
	
	break_trial.present();
	ready_trial.present();
	set_trial.present();

	loop int j = 1 until j > block2.count() begin
		
		this_trial = block2[j];

		this_trial.set_start_delay(random(min_post_response_delay, max_post_response_delay));

		this_trial.get_stimulus_event(1).get_port_codes(port_codes);
		target_buttons[1] = int((port_codes[1]) / 100);
		curr_type = (i * 2) + (target_buttons[1] - 2);
		term.print_line("trial: " + this_trial.description());
		
		this_trial.present();

		response_trial.get_stimulus_event(1).set_target_button(target_buttons);
		response_trial.present();
		
		stimulus_data stim_data = stimulus_manager.last_stimulus_data();
		stim_data.set_event_code(this_trial.description());

		stim_type = (int(port_codes[1] / 100)*3 + int(port_codes[1] / 10) % 10) - 3;
		input_data(j, i*2, stim_type, stim_data);

		j = j+1;
	end;

	block_output(i*2);

	if (i != num_blocks/2) then
		break_trial.present();
		ready_trial.present();
	end;
	i = i + 1;
end;
final_output();
done_trial.present();
